private function AviSeq_1A(  ) void ;
private function AviSeq_1B(  ) void ;
private function AviSeq_2A(  ) void ;
private function AviSeq_2B(  ) void ;
private function AviSeq_3A(  ) void ;
private function AviSeq_3B(  ) void ;
private function AviSeq_4A(  ) void ;
private function AviSeq_4B(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function AviSeq_1A(  ) void {
  private variable loopCounter2;
  private variable i_rna_volume;
  private variable i_nfwater_vol;
  private variable i_primer_vol;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private variable i_bufferDP_vol;
  private variable i_enzyme_vol;
  private variable i_stopbuffer_vol;
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  i_nfwater_vol = 11 - i_rna_volume;
  i_primer_vol = 3;
  i_rna_volume = 11;
  i_bufferDP_vol = 5;
  i_enzyme_vol = 1;
  i_stopbuffer_vol = 2;
  if(0){
    SeqResetSequenceIndexes(Seq_Destination);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter2 = 0;
      while (
         (Seq_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_Destination, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_Destination.SetMax(Seq_Destination.GetTotal());
      Seq_Destination.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  target_Labware = Translate("AdapterEppendorfTubePos24_0001");
  str_tube_position = Translate("A1");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("AdapterEppendorfTubePos24_0001");
  str_tube_position = Translate("B1");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("AdapterEppendorfTubePos24_0002");
  str_tube_position = Translate("A4");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("SMP_CAR_32_12x75_A00_0003");
  str_tube_position = Translate("12");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
}

private function AviSeq_1B(  ) void {
  private variable i_MagBeads_vol;
  private variable i_fRT_vol;
  private variable str_DW_position;
  private variable target_DW_Labware;
  private sequence Seq_DWplate;
  private timer MigrationTime;
  private timer BeadsMixtureIncubation;
  private variable str_bPCR_position;
  private sequence Seq_PCRplate;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private variable HHS1;
  private variable loopCounter3;
  private timer Spintime;
  private timer MagRackAirDry;
  private dialog customDialog_5;
  private dialog customDialog_6;
  private timer BriefVortex;
  private timer IncubateTime;
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  TipCount::Edit2(ML_STAR.Tip300uLFilter, Translate("Tip300uLFiltered"), ML_STAR, 99999);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
  i_MagBeads_vol = 2.2 * 22;
  i_fRT_vol = 22;
  if(0){
    SeqRemoveAll(Seq_DWplate);
    target_DW_Labware = Translate("Cos_96_DW_2mL_0002");
    {
      for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
      {
        loopCounter2 = loopCounter2 + 1;
        str_DW_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
        SeqAdd(Seq_DWplate, target_DW_Labware, str_DW_position);
      }
    }
    SeqResetSequenceIndexes(Seq_DWplate);
    {
      loopCounter2 = 0;
      while (
         (Seq_DWplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_DWplate, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (Seq_DWplate.GetCurrentPosition() > 0 && Seq_DWplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_DWplate.SetMax(Seq_DWplate.GetTotal());
      Seq_DWplate.SetCurrentPosition(1);
    }
  }
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0008");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  customDialog_3.InitCustomDialog("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");
  customDialog_3.ShowCustomDialog();
  if( 0 == BeadsMixtureIncubation.SetTimer(600) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BeadsMixtureIncubation.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1500);
  if( 0 == Spintime.SetTimer(10) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Spintime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if( 0 == MigrationTime.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MigrationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0007");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    for(loopCounter3 = 0; loopCounter3 < 2;)
    {
      loopCounter3 = loopCounter3 + 1;
      SeqResetSequenceIndexes(Seq_PCRplate);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == IncubateTime.SetTimer(30) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == IncubateTime.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      SeqResetSequenceIndexes(Seq_PCRplate);
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
    }
  }
  if( 0 == MagRackAirDry.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MagRackAirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_6.InitCustomDialog("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");
  customDialog_6.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1000);
  if( 0 == BriefVortex.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BriefVortex.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
}

private function AviSeq_2A(  ) void {
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  TipCount::Edit2(ML_STAR.Tip300uLFilter, Translate("Tip300uLFiltered"), ML_STAR, 99999);
}

private function AviSeq_2B(  ) void {
}

private function AviSeq_3A(  ) void {
}

private function AviSeq_3B(  ) void {
}

private function AviSeq_4A(  ) void {
}

private function AviSeq_4B(  ) void {
}
