private function AviSeq_1A(  ) void ;
private function AviSeq_1B(  ) void ;
private function AviSeq_2A(  ) void ;
private function AviSeq_2B(  ) void ;
private function AviSeq_3A(  ) void ;
private function AviSeq_3B(  ) void ;
private function AviSeq_4A(  ) void ;
private function AviSeq_4B(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function AviSeq_1A(  ) void {
  private variable loopCounter2;
  private variable i_rna_volume;
  private variable i_nfwater_vol;
  private variable i_primer_vol;
  private dialog customDialog_1;
  private dialog customDialog_2;
  private variable i_bufferDP_vol;
  private variable i_enzyme_vol;
  private variable i_stopbuffer_vol;
  private dialog customDialog_3;
  private dialog customDialog_4;
  private dialog customDialog_5;
  private variable HHS1;
  private timer BriefVortex;
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  customDialog_3.InitCustomDialog("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");
  customDialog_3.ShowCustomDialog();
  i_nfwater_vol = 11 - i_rna_volume;
  i_primer_vol = 3;
  i_rna_volume = 11;
  i_bufferDP_vol = 5;
  i_enzyme_vol = 1;
  i_stopbuffer_vol = 2;
  if(0){
    SeqResetSequenceIndexes(Seq_Destination);
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    {
      loopCounter2 = 0;
      while (
         (Seq_Destination.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_Destination, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        if (
           (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_Destination.SetMax(Seq_Destination.GetTotal());
      Seq_Destination.SetCurrentPosition(1);
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  target_Labware = Translate("AdapterEppendorfTubePos24_0001");
  str_tube_position = Translate("A1");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("AdapterEppendorfTubePos24_0001");
  str_tube_position = Translate("B1");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("AdapterEppendorfTubePos24_0002");
  str_tube_position = Translate("A4");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  PTL::ResetUnloadingStateAndSequences();
  PTL::SetUnloadingState("UserResponseTime", 0);
  PTL::SetUnloadingState("ErrorHandling", 3);
  PTL::SetUnloadingSize(1);
  PTL::SetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, hslFalse, "");
  if( 0 == PTL::Unload(ML_STAR) )
  {
        PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  PTL::ResetLoadingStateAndSequences();
  PTL::SetLoadingState("UserResponseTime", 0);
  PTL::SetLoadingState("ErrorHandling", 3);
  PTL::SetLoadingState("CalibrateCarrierChannel", -1);
  PTL::SetLoadingSize(1);
  PTL::SetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, 1, -10, hslTrue, hslFalse, "");
  if( 0 == PTL::Load(ML_STAR, hslTrue) )
  {
        PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("SMP_CAR_32_12x75_A00_0003");
  str_tube_position = Translate("12");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_Destination);
  {
    loopCounter2 = 0;
    while (
       (Seq_Destination.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_Destination, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_Destination.GetCurrentPosition() > 0 && Seq_Destination.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_Destination.SetMax(Seq_Destination.GetTotal());
    Seq_Destination.SetCurrentPosition(1);
  }
  customDialog_5.InitCustomDialog("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");
  customDialog_5.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1000);
  if( 0 == BriefVortex.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BriefVortex.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_4.InitCustomDialog("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");
  customDialog_4.ShowCustomDialog();
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
}

private function AviSeq_1B(  ) void {
  private variable i_MagBeads_vol;
  private variable i_fRT_vol;
  private timer MigrationTime;
  private timer BeadsMixtureIncubation;
  private variable str_bPCR_position;
  private sequence Seq_PCRplate;
  private dialog customDialog_6;
  private dialog customDialog_7;
  private variable HHS1;
  private variable loopCounter3;
  private timer Spintime;
  private timer MagRackAirDry;
  private dialog customDialog_8;
  private dialog customDialog_9;
  private timer BriefVortex;
  private timer IncubateTime;
  private dialog customDialog_10;
  private dialog customDialog_11;
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  TipCount::Edit2(ML_STAR.Tip300uLFilter, Translate("Tip300uLFiltered"), ML_STAR, 99999);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
  i_MagBeads_vol = 2.2 * 22;
  i_fRT_vol = 22;
  customDialog_11.InitCustomDialog("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");
  customDialog_11.ShowCustomDialog();
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0008");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  customDialog_6.InitCustomDialog("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");
  customDialog_6.ShowCustomDialog();
  if( 0 == BeadsMixtureIncubation.SetTimer(600) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BeadsMixtureIncubation.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1500);
  if( 0 == Spintime.SetTimer(10) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Spintime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_7.InitCustomDialog("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");
  customDialog_7.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if( 0 == MigrationTime.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MigrationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0007");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    for(loopCounter3 = 0; loopCounter3 < 2;)
    {
      loopCounter3 = loopCounter3 + 1;
      SeqResetSequenceIndexes(Seq_PCRplate);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == IncubateTime.SetTimer(30) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == IncubateTime.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      SeqResetSequenceIndexes(Seq_PCRplate);
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
    }
  }
  if( 0 == MagRackAirDry.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MagRackAirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  customDialog_10.InitCustomDialog("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");
  customDialog_10.ShowCustomDialog();
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_9.InitCustomDialog("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");
  customDialog_9.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1000);
  if( 0 == BriefVortex.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BriefVortex.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_8.InitCustomDialog("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");
  customDialog_8.ShowCustomDialog();
  HSLHamHeaterShaker::Terminate();
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
}

private function AviSeq_2A(  ) void {
  private variable i_10xdilutedCtrlHumanPrimer_vol;
  private variable i_10XSARSCoV2P1_vol;
  private variable i_10XSARSCoV2P2_vol;
  private variable i_5XmPCRmix_vol;
  private variable target_Labware2;
  private variable str_bPCR_position;
  private variable i_PurifiedRTSample_vol;
  private variable str_bPCR_position2;
  private sequence Seq_PCRplate;
  private sequence Seq_PCRplate2;
  private variable HHS1;
  private variable i_stopbuffer_vol;
  private timer _2A2ShakingTime;
  private timer BriefVortex;
  private dialog customDialog_12;
  private dialog customDialog_13;
  private dialog customDialog_14;
  private dialog customDialog_15;
  private dialog customDialog_16;
  private dialog customDialog_17;
  private dialog customDialog_18;
  private dialog customDialog_19;
  private variable i_nfwater2AP1_vol;
  private variable i_nfwater2AP2_vol;
  private variable i_10xdilutedCtrlHumanPrimer1_vol;
  private variable i_10xdilutedCtrlHumanPrimer2_vol;
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  TipCount::Edit2(ML_STAR.Tip300uLFilter, Translate("Tip300uLFiltered"), ML_STAR, 99999);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
  customDialog_17.InitCustomDialog("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");
  customDialog_17.SetCustomDialogProperty( "numeric1.Value", i_10xdilutedCtrlHumanPrimer1_vol );
  customDialog_17.SetCustomDialogProperty( "numeric2.Value", i_10xdilutedCtrlHumanPrimer2_vol );
  customDialog_17.ShowCustomDialog();
  i_10xdilutedCtrlHumanPrimer1_vol = customDialog_17.GetCustomDialogProperty( "numeric1.Value" );
  i_10xdilutedCtrlHumanPrimer2_vol = customDialog_17.GetCustomDialogProperty( "numeric2.Value" );
  customDialog_19.InitCustomDialog("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");
  customDialog_19.ShowCustomDialog();
  customDialog_13.InitCustomDialog("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");
  customDialog_13.ShowCustomDialog();
  i_nfwater2AP1_vol = i_nfwater2AP1_vol - i_10xdilutedCtrlHumanPrimer1_vol;
  i_nfwater2AP2_vol = i_nfwater2AP2_vol - i_10xdilutedCtrlHumanPrimer2_vol;
  i_5XmPCRmix_vol = 2;
  i_10XSARSCoV2P1_vol = 1;
  i_10XSARSCoV2P2_vol = 1;
  i_PurifiedRTSample_vol = 5;
  i_stopbuffer_vol = 2;
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0002");
  target_Labware2 = Translate("Cos_96_PCR_0003");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      str_bPCR_position2 = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
      SeqAdd(Seq_PCRplate2, target_Labware2, str_bPCR_position2);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  SeqResetSequenceIndexes(Seq_PCRplate2);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  customDialog_14.InitCustomDialog("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");
  customDialog_14.ShowCustomDialog();
  SeqResetSequenceIndexes(Seq_PCRplate);
  SeqResetSequenceIndexes(Seq_PCRplate2);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate2.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate2, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate2.GetCurrentPosition() > 0 && Seq_PCRplate2.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate2.SetMax(Seq_PCRplate2.GetTotal());
    Seq_PCRplate2.SetCurrentPosition(1);
  }
  if (i_10xdilutedCtrlHumanPrimer_vol > 0)
  {
    SeqResetSequenceIndexes(Seq_PCRplate);
    SeqResetSequenceIndexes(Seq_PCRplate2);
    if (i_10xdilutedCtrlHumanPrimer1_vol > 0)
    {
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
    }
    if (i_10xdilutedCtrlHumanPrimer2_vol > 0)
    {
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate2.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate2, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Seq_PCRplate2.GetCurrentPosition() > 0 && Seq_PCRplate2.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate2.SetMax(Seq_PCRplate2.GetTotal());
        Seq_PCRplate2.SetCurrentPosition(1);
      }
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  SeqResetSequenceIndexes(Seq_PCRplate2);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate2.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate2, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate2.GetCurrentPosition() > 0 && Seq_PCRplate2.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate2.SetMax(Seq_PCRplate2.GetTotal());
    Seq_PCRplate2.SetCurrentPosition(1);
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  SeqResetSequenceIndexes(Seq_PCRplate2);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate2.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate2, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate2.GetCurrentPosition() > 0 && Seq_PCRplate2.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate2.SetMax(Seq_PCRplate2.GetTotal());
    Seq_PCRplate2.SetCurrentPosition(1);
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  PTL::ResetUnloadingStateAndSequences();
  PTL::SetUnloadingState("UserResponseTime", 0);
  PTL::SetUnloadingState("ErrorHandling", 3);
  PTL::SetUnloadingSize(2);
  PTL::SetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, hslFalse, "");
  PTL::SetUnloadingSequence(1, ML_STAR.SAMPLE_PLATE, hslFalse, "");
  if( 0 == PTL::Unload(ML_STAR) )
  {
        PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  PTL::GetUnloadingSequence(1, ML_STAR.SAMPLE_PLATE);
  customDialog_18.InitCustomDialog("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");
  customDialog_18.ShowCustomDialog();
  PTL::ResetLoadingStateAndSequences();
  PTL::SetLoadingState("UserResponseTime", 0);
  PTL::SetLoadingState("ErrorHandling", 3);
  PTL::SetLoadingState("CalibrateCarrierChannel", -1);
  PTL::SetLoadingSize(2);
  PTL::SetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, 1, -10, hslTrue, hslFalse, "");
  PTL::SetLoadingSequence(1, ML_STAR.SAMPLE_PLATE, 1, -10, hslTrue, hslFalse, "");
  if( 0 == PTL::Load(ML_STAR, hslTrue) )
  {
        PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  PTL::GetLoadingSequence(1, ML_STAR.SAMPLE_PLATE);
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1800);
  if( 0 == _2A2ShakingTime.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == _2A2ShakingTime.WaitTimer(hslTrue, hslFalse) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1800);
  if( 0 == _2A2ShakingTime.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == _2A2ShakingTime.WaitTimer(hslTrue, hslFalse) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  PTL::ResetUnloadingStateAndSequences();
  PTL::SetUnloadingState("UserResponseTime", 0);
  PTL::SetUnloadingState("ErrorHandling", 3);
  PTL::SetUnloadingSize(2);
  PTL::SetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, hslFalse, "");
  PTL::SetUnloadingSequence(1, ML_STAR.SAMPLE_PLATE, hslFalse, "");
  if( 0 == PTL::Unload(ML_STAR) )
  {
        PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  PTL::GetUnloadingSequence(1, ML_STAR.SAMPLE_PLATE);
  customDialog_16.InitCustomDialog("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");
  customDialog_16.ShowCustomDialog();
  PTL::ResetLoadingStateAndSequences();
  PTL::SetLoadingState("UserResponseTime", 0);
  PTL::SetLoadingState("ErrorHandling", 3);
  PTL::SetLoadingState("CalibrateCarrierChannel", -1);
  PTL::SetLoadingSize(2);
  PTL::SetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, 1, -10, hslTrue, hslFalse, "");
  PTL::SetLoadingSequence(1, ML_STAR.SAMPLE_PLATE, 1, -10, hslTrue, hslFalse, "");
  if( 0 == PTL::Load(ML_STAR, hslTrue) )
  {
        PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  PTL::GetLoadingSequence(1, ML_STAR.SAMPLE_PLATE);
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  SeqRemoveAll(Seq_tube);
  SeqRemoveAll(Seq_PCRplate);
  SeqRemoveAll(Seq_PCRplate2);
  target_Labware = Translate("SMP_CAR_32_12x75_A00_0003");
  str_tube_position = Translate("12");
  target_Labware = Translate("Cos_96_PCR_0004");
  target_Labware2 = Translate("Cos_96_PCR_0005");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      str_bPCR_position2 = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
      SeqAdd(Seq_PCRplate2, target_Labware2, str_bPCR_position2);
    }
  }
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_PCRplate);
  SeqResetSequenceIndexes(Seq_PCRplate2);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate2.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate2, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate2.GetCurrentPosition() > 0 && Seq_PCRplate2.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate2.SetMax(Seq_PCRplate2.GetTotal());
    Seq_PCRplate2.SetCurrentPosition(1);
  }
  customDialog_15.InitCustomDialog("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");
  customDialog_15.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1000);
  if( 0 == BriefVortex.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BriefVortex.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1000);
  if( 0 == BriefVortex.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BriefVortex.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_12.InitCustomDialog("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");
  customDialog_12.ShowCustomDialog();
  SeqRemoveAll(Seq_PCRplate);
  SeqRemoveAll(Seq_PCRplate2);
  target_Labware = Translate("Cos_96_PCR_0004");
  target_Labware2 = Translate("Cos_96_PCR_0005");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      str_bPCR_position2 = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
      SeqAdd(Seq_PCRplate2, target_Labware2, str_bPCR_position2);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  SeqResetSequenceIndexes(Seq_PCRplate2);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  VIRTUALLABWARE::MoveSeq(ML_STAR, ML_STAR.SAMPLE_PLATE, -20, 0, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  VIRTUALLABWARE::MoveSeq(ML_STAR, ML_STAR.SAMPLE_PLATE, 0, 0, 0);
  HSLHamHeaterShaker::Terminate();
}

private function AviSeq_2B(  ) void {
  private variable HHS1;
  private variable str_bPCR_position;
  private variable loopCounter3;
  private variable i_MagBeads_vol;
  private timer IncubateTime;
  private timer MigrationTime;
  private timer Spintime;
  private timer BriefVortex;
  private timer MagRackAirDry;
  private sequence Seq_PCRplate;
  private dialog customDialog_20;
  private dialog customDialog_21;
  private dialog customDialog_22;
  private dialog customDialog_23;
  private dialog customDialog_24;
  private dialog customDialog_25;
  private timer QuickSpin;
  private timer MagnetseparationTime;
  private dialog customDialog_26;
  private dialog customDialog_27;
  private variable i_1pool;
  private variable i_2pool;
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  TipCount::Edit2(ML_STAR.Tip300uLFilter, Translate("Tip300uLFiltered"), ML_STAR, 99999);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
  customDialog_27.InitCustomDialog("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");
  customDialog_27.SetCustomDialogProperty( "radioButton1.IsChecked", i_1pool );
  customDialog_27.SetCustomDialogProperty( "radioButton2.IsChecked", i_2pool );
  customDialog_27.ShowCustomDialog();
  i_1pool = customDialog_27.GetCustomDialogProperty( "radioButton1.IsChecked" );
  i_2pool = customDialog_27.GetCustomDialogProperty( "radioButton2.IsChecked" );
  if (i_1pool == 1)
  {
    i_MagBeads_vol = 1.3 * 22;
    customDialog_26.InitCustomDialog("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");
    customDialog_26.ShowCustomDialog();
    SeqRemoveAll(Seq_PCRplate);
    target_Labware = Translate("Cos_96_PCR_0004");
    {
      for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
      {
        loopCounter2 = loopCounter2 + 1;
        str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
        SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
      }
    }
    SeqResetSequenceIndexes(Seq_PCRplate);
    {
      loopCounter2 = 0;
      while (
         (Seq_PCRplate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, Seq_PCRplate, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
      Seq_PCRplate.SetCurrentPosition(1);
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
    HSLHamHeaterShaker::StartShaker(HHS1, 1000);
    if( 0 == QuickSpin.SetTimer(5) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == QuickSpin.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    HSLHamHeaterShaker::StopShaker(HHS1);
    HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
  }
  if (i_2pool == 1)
  {
    i_MagBeads_vol = 1.3 * 24;
  }
  customDialog_25.InitCustomDialog("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");
  customDialog_25.ShowCustomDialog();
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0004");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  customDialog_22.InitCustomDialog("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");
  customDialog_22.ShowCustomDialog();
  if( 0 == MigrationTime.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MigrationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1500);
  if( 0 == Spintime.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Spintime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_23.InitCustomDialog("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");
  customDialog_23.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if( 0 == MagnetseparationTime.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MagnetseparationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0007");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    for(loopCounter3 = 0; loopCounter3 < 2;)
    {
      loopCounter3 = loopCounter3 + 1;
      SeqResetSequenceIndexes(Seq_PCRplate);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == IncubateTime.SetTimer(30) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == IncubateTime.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      SeqResetSequenceIndexes(Seq_PCRplate);
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
    }
  }
  if( 0 == MagRackAirDry.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MagRackAirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  customDialog_24.InitCustomDialog("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");
  customDialog_24.ShowCustomDialog();
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_21.InitCustomDialog("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");
  customDialog_21.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1000);
  if( 0 == BriefVortex.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BriefVortex.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_20.InitCustomDialog("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");
  customDialog_20.ShowCustomDialog();
  HSLHamHeaterShaker::Terminate();
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
}

private function AviSeq_3A(  ) void {
  private dialog customDialog_28;
  private variable i_CPDigestionBuffer_vol;
  private variable str_bPCR_position;
  private variable i_nfwater_vol;
  private variable i_stopbuffer_vol;
  private variable i_CPDigestionReagent_vol;
  private sequence Seq_PCRplate;
  private dialog customDialog_29;
  private dialog customDialog_30;
  private dialog customDialog_31;
  MECC::TraceComment(Translate("--------------------------AviSeq_3A--------------------------"));
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  customDialog_31.InitCustomDialog("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");
  customDialog_31.ShowCustomDialog();
  i_nfwater_vol = 7;
  i_CPDigestionBuffer_vol = 2;
  i_CPDigestionReagent_vol = 1;
  i_stopbuffer_vol = 2;
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0008");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("AdapterEppendorfTubePos24_0002");
  str_tube_position = Translate("A6");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("AdapterEppendorfTubePos24_0001");
  str_tube_position = Translate("D3");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  PTL::ResetUnloadingStateAndSequences();
  PTL::SetUnloadingState("UserResponseTime", 0);
  PTL::SetUnloadingState("ErrorHandling", 3);
  PTL::SetUnloadingSize(1);
  PTL::SetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, hslFalse, "");
  if( 0 == PTL::Unload(ML_STAR) )
  {
        PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  customDialog_29.InitCustomDialog("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");
  customDialog_29.ShowCustomDialog();
  PTL::ResetLoadingStateAndSequences();
  PTL::SetLoadingState("UserResponseTime", 0);
  PTL::SetLoadingState("ErrorHandling", 3);
  PTL::SetLoadingState("CalibrateCarrierChannel", -1);
  PTL::SetLoadingSize(1);
  PTL::SetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, 1, -10, hslTrue, hslFalse, "");
  if( 0 == PTL::Load(ML_STAR, hslTrue) )
  {
        PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  SeqRemoveAll(Seq_tube);
  target_Labware = Translate("SMP_CAR_32_12x75_A00_0003");
  str_tube_position = Translate("12");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      SeqAdd(Seq_tube, target_Labware, str_tube_position);
    }
  }
  SeqResetSequenceIndexes(Seq_tube);
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
}

private function AviSeq_3B(  ) void {
  private dialog customDialog_32;
  private dialog customDialog_33;
  private dialog customDialog_34;
  private dialog customDialog_35;
  private variable HHS1;
  private variable i_fRT_vol;
  private variable str_DW_position;
  private variable str_bPCR_position;
  private variable target_DW_Labware;
  private variable loopCounter3;
  private variable i_MagBeads_vol;
  private timer IncubateTime;
  private timer MigrationTime;
  private timer Spintime;
  private timer BeadsMixtureIncubation;
  private timer BriefVortex;
  private timer MagRackAirDry;
  private sequence Seq_PCRplate;
  private sequence Seq_DWplate;
  private dialog customDialog_36;
  private dialog customDialog_37;
  private dialog customDialog_38;
  MECC::TraceComment(Translate("--------------------------AviSeq_3B--------------------------"));
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  TipCount::Edit2(ML_STAR.Tip300uLFilter, Translate("Tip300uLFiltered"), ML_STAR, 99999);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
  i_MagBeads_vol = 1.3 * 22;
  customDialog_36.InitCustomDialog("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");
  customDialog_36.ShowCustomDialog();
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0008");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  customDialog_32.InitCustomDialog("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");
  customDialog_32.ShowCustomDialog();
  if( 0 == BeadsMixtureIncubation.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BeadsMixtureIncubation.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1500);
  if( 0 == Spintime.SetTimer(10) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Spintime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_33.InitCustomDialog("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");
  customDialog_33.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if( 0 == MigrationTime.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MigrationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0007");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    for(loopCounter3 = 0; loopCounter3 < 2;)
    {
      loopCounter3 = loopCounter3 + 1;
      SeqResetSequenceIndexes(Seq_PCRplate);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == IncubateTime.SetTimer(300) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == IncubateTime.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      SeqResetSequenceIndexes(Seq_PCRplate);
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
    }
  }
  if( 0 == MagRackAirDry.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MagRackAirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  customDialog_37.InitCustomDialog("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");
  customDialog_37.ShowCustomDialog();
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_35.InitCustomDialog("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");
  customDialog_35.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1000);
  if( 0 == BriefVortex.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BriefVortex.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_34.InitCustomDialog("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");
  customDialog_34.ShowCustomDialog();
  HSLHamHeaterShaker::Terminate();
}

private function AviSeq_4A(  ) void {
  private dialog customDialog_39;
  private variable HHS1;
  private dialog customDialog_40;
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  PTL::ResetUnloadingStateAndSequences();
  PTL::SetUnloadingState("UserResponseTime", 0);
  PTL::SetUnloadingState("ErrorHandling", 3);
  PTL::SetUnloadingSize(1);
  PTL::SetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, hslFalse, "");
  if( 0 == PTL::Unload(ML_STAR) )
  {
        PTL::RaiseRuntimeError(-1540095744, PTL::IDS::smartStepUnload, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetUnloadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  customDialog_40.InitCustomDialog("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");
  customDialog_40.ShowCustomDialog();
  PTL::ResetLoadingStateAndSequences();
  PTL::SetLoadingState("UserResponseTime", 0);
  PTL::SetLoadingState("ErrorHandling", 3);
  PTL::SetLoadingState("CalibrateCarrierChannel", -1);
  PTL::SetLoadingSize(1);
  PTL::SetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT, 1, -10, hslTrue, hslFalse, "");
  if( 0 == PTL::Load(ML_STAR, hslTrue) )
  {
        PTL::RaiseRuntimeError(-1556872960, PTL::IDS::smartStepLoad, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::GetLoadingSequence(0, ML_STAR.PCRPLATE_OUTPUT);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
}

private function AviSeq_4B(  ) void {
  private dialog customDialog_41;
  private dialog customDialog_42;
  private dialog customDialog_43;
  private dialog customDialog_44;
  private variable HHS1;
  private variable str_bPCR_position;
  private variable loopCounter3;
  private variable i_MagBeads_vol;
  private timer IncubateTime;
  private timer MigrationTime;
  private timer Spintime;
  private timer BeadsMixtureIncubation;
  private timer BriefVortex;
  private timer MagRackAirDry;
  private sequence Seq_PCRplate;
  private dialog customDialog_45;
  private dialog customDialog_46;
  TipCount::Edit2(ML_STAR.Tip50uLFiltered, Translate("Tip50uLFiltered"), ML_STAR, 99999);
  TipCount::Edit2(ML_STAR.Tip300uLFilter, Translate("Tip300uLFiltered"), ML_STAR, 99999);
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 1, HHS1);
  i_MagBeads_vol = 1 * 40;
  customDialog_46.InitCustomDialog("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");
  customDialog_46.ShowCustomDialog();
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0008");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  customDialog_42.InitCustomDialog("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");
  customDialog_42.ShowCustomDialog();
  if( 0 == BeadsMixtureIncubation.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BeadsMixtureIncubation.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1500);
  if( 0 == Spintime.SetTimer(10) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Spintime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_43.InitCustomDialog("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");
  customDialog_43.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if( 0 == MigrationTime.SetTimer(120) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MigrationTime.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  SeqRemoveAll(Seq_PCRplate);
  target_Labware = Translate("Cos_96_PCR_0007");
  {
    for(loopCounter2 = 0; loopCounter2 < loopcountfortube;)
    {
      loopCounter2 = loopCounter2 + 1;
      str_bPCR_position = arr_str_posiiton.ElementAt( loopCounter2 -1);
      SeqAdd(Seq_PCRplate, target_Labware, str_bPCR_position);
    }
  }
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    for(loopCounter3 = 0; loopCounter3 < 2;)
    {
      loopCounter3 = loopCounter3 + 1;
      SeqResetSequenceIndexes(Seq_PCRplate);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == IncubateTime.SetTimer(300) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == IncubateTime.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      SeqResetSequenceIndexes(Seq_PCRplate);
      {
        loopCounter2 = 0;
        while (
           (Seq_PCRplate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, Seq_PCRplate, 1);
          loopCounter2 = loopCounter2 + 1;
          ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
          if (
             (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
        Seq_PCRplate.SetCurrentPosition(1);
      }
    }
  }
  if( 0 == MagRackAirDry.SetTimer(300) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == MagRackAirDry.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  customDialog_45.InitCustomDialog("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");
  customDialog_45.ShowCustomDialog();
  SeqResetSequenceIndexes(Seq_PCRplate);
  {
    loopCounter2 = 0;
    while (
       (Seq_PCRplate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq_PCRplate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (Seq_PCRplate.GetCurrentPosition() > 0 && Seq_PCRplate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq_PCRplate.SetMax(Seq_PCRplate.GetTotal());
    Seq_PCRplate.SetCurrentPosition(1);
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_41.InitCustomDialog("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");
  customDialog_41.ShowCustomDialog();
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  HSLHamHeaterShaker::SetPlateLock(HHS1, 1);
  HSLHamHeaterShaker::StartShaker(HHS1, 1000);
  if( 0 == BriefVortex.SetTimer(5) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == BriefVortex.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(HHS1);
  HSLHamHeaterShaker::SetPlateLock(HHS1, 0);
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  customDialog_44.InitCustomDialog("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");
  customDialog_44.ShowCustomDialog();
}
